PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo Experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Encoding
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.color = EncodingColour  # This sets the background color
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Word
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  Routine Distractors
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent distractor
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      text [set every repeat] = $Sequence
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 1.0
      text = Click here to submit
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  Routine Retrieval
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.color = RecallColour  # Set the background color dynamically
    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent instruction_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      text = Please type as many words as you can remember from the list, one at a time. After typing each word, click Submit. If you can't remember any words, leave the space blank or type any word that comes to mind and click Submit.
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    TextboxComponent textbox_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 1.0
      text = Click here to submit
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  Routine instructions_2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "gray"  # Sets a neutral gray background
    TextComponent instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now see incomplete numerical sequences. Your task is to identify the next number in the sequence and type it in the box. After typing, click Submit. Press "space" to begin.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Try to remember the words as they appear on the screen. You will be asked to recall them later. Press "space" to begin.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine disclaimer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Now the recall task will begin.
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Chair'), ('EncodingColour', '"red"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Cloud'), ('EncodingColour', '"blue"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Table'), ('EncodingColour', '"yellow"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Book'), ('EncodingColour', '"green"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Pen'), ('EncodingColour', '"red"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Tree'), ('EncodingColour', '"blue"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Stone'), ('EncodingColour', '"yellow"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Window'), ('EncodingColour', '"green"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Love'), ('EncodingColour', '"red"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'War'), ('EncodingColour', '"blue"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Death'), ('EncodingColour', '"yellow"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Fear'), ('EncodingColour', '"green"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Hate'), ('EncodingColour', '"red"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Happiness'), ('EncodingColour', '"blue"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Fight'), ('EncodingColour', '"yellow"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Freedom'), ('EncodingColour', '"green"'), ('RecallColour', '"green"')])]
    Routine Encoding
  LoopTerminator trials
  Routine instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = distractors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Sequence', '2, 4, 6, __?')]),
      OrderedDict([('Sequence', '7, 5, 3, __?')]),
      OrderedDict([('Sequence', '10, 20, 30, __?')]),
      OrderedDict([('Sequence', '5, 10, 15, __?')]),
      OrderedDict([('Sequence', '100, 200, 300, __?')]),
      OrderedDict([('Sequence', '50, 45, 40, __?')]),
      OrderedDict([('Sequence', '20, 40, 60, __?')]),
      OrderedDict([('Sequence', '8, 16, 24, __?')]),
      OrderedDict([('Sequence', '3, 6, 9, __?')]),
      OrderedDict([('Sequence', '7, 14, 21, __?')])]
    Routine Distractors
  LoopTerminator trials_2
  Routine disclaimer
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Chair'), ('EncodingColour', '"red"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Cloud'), ('EncodingColour', '"blue"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Table'), ('EncodingColour', '"yellow"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Book'), ('EncodingColour', '"green"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Pen'), ('EncodingColour', '"red"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Tree'), ('EncodingColour', '"blue"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Stone'), ('EncodingColour', '"yellow"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Window'), ('EncodingColour', '"green"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Love'), ('EncodingColour', '"red"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'War'), ('EncodingColour', '"blue"'), ('RecallColour', '"green"')]),
      OrderedDict([('Word', 'Death'), ('EncodingColour', '"yellow"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Fear'), ('EncodingColour', '"green"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Hate'), ('EncodingColour', '"red"'), ('RecallColour', '"yellow"')]),
      OrderedDict([('Word', 'Happiness'), ('EncodingColour', '"blue"'), ('RecallColour', '"red"')]),
      OrderedDict([('Word', 'Fight'), ('EncodingColour', '"yellow"'), ('RecallColour', '"blue"')]),
      OrderedDict([('Word', 'Freedom'), ('EncodingColour', '"green"'), ('RecallColour', '"green"')])]
    Routine Retrieval
  LoopTerminator trials_3
